<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindVrForagingDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.VersionControl;assembly=AllenNeuralDynamics.VersionControl"
                 xmlns:p4="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p6="clr-namespace:;assembly=Extensions"
                 xmlns:p7="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p8="clr-namespace:OpenTK;assembly=OpenTK"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:p9="clr-namespace:AllenNeuralDynamics.Treadmill;assembly=AllenNeuralDynamics.Treadmill"
                 xmlns:p10="clr-namespace:AllenNeuralDynamics.AindManipulator;assembly=AllenNeuralDynamics.AindManipulator"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" DisplayName="TaskPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath />
        <RigPath />
        <SessionPath />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Session" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindVrForagingRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindVrForagingTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Hardware.bonsai" />
      <Expression xsi:type="GroupWorkflow">
        <Name>SessionSettings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RngSeed</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateContinuousUniform">
                <p2:Lower>0</p2:Lower>
                <p2:Upper>10</p2:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>CheckNull</scr:Name>
              <scr:Expression>Item1.HasValue ? Item1.Value : Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeedValue</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Seed" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:CreateRepository">
                <p3:Path>../.</p3:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Repository</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Text><![CDATA[A small value that is used to sum to the visual horizon to instantiate resources.]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SigmaZ</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="FarClipHorizon" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>FarClipHorizon</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Text><![CDATA[The distance used to determine whether a segment should be disposed.]]></Text>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DisposingTreshold" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>DisposingTreshold</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RefreshEnvironmentRate" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT0.1S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RefreshEnvironmentRate</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SessionName" Selector="SessionName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DataDirectory</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RootFolder" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai">
              <RootFolder />
              <SessionName xsi:nil="true" />
              <SubjectName>LoggingRootPath</SubjectName>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="25" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="30" Label="Source1" />
            <Edge From="29" To="30" Label="Source2" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="38" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Patch">
              <rx:Name>GlobalActivePatch</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:VirtualSite">
              <rx:Name>GlobalActiveSite</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p5:SoftwareEvent">
              <rx:Name>UpdaterEvents</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p5:SoftwareEvent">
              <rx:Name>SoftwareEvent</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
              <rx:Name>StartLogging</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>Annotations</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p6:PatchState">
              <rx:Name>GlobalPatchState</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p7:CreateSoftwareEvent">
                <p7:EventName>GlobalPatchState</p7:EventName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoftwareEvent</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Position</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(p8:Vector3)">
                    <rx:Name>CurrentPosition</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:Timestamped(sys:Boolean)">
                    <rx:Name>IsStopped</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p8:Vector3">
                    <rx:Name>MaxPosition</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Double">
                    <rx:Name>StopVelocityThreshold</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Double,sys:Double)">
                    <rx:Name>FilteredCurrentVelocity</rx:Name>
                  </Expression>
                </Nodes>
                <Edges />
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ExperimentState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="20" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="20" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source3" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\HardwareChecks.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Logging.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Delay">
          <gl:DueTime>PT1S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\OperationControl.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TaskLogic.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartCondition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:Unit">
              <rx:Name>StartExperimentShortcut</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TextureBank</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggeredCamerasReady</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartLogging</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="LogDelay" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT3S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:SampleOnUpdateFrame" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source3" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Visualizers.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Delay">
          <gl:DueTime>PT1S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>EndRoutine</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>olfactometerChannelsCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Range">
                <rx:Start>0</rx:Start>
                <rx:Count>0</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>olfactometerChannelsCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="OlfactometerChannelCount" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>OperationControl.OdorControl.TargetOdorFlow</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PerOdorFlow" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>OperationControl.OdorControl.TargetTotalFlow</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TotalFlow" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p6:CreateHubOdorMixture">
                <p6:PerOdorFlow>100</p6:PerOdorFlow>
                <p6:TotalFlow>1000</p6:TotalFlow>
                <p6:OlfactometerChannelCount>3</p6:OlfactometerChannelCount>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SetOdorMix</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OdorEndValveState</Name>
            </Expression>
            <Expression xsi:type="p9:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p9:CreateBrakeCurrentSetPointPayload">
                <p9:BrakeCurrentSetPoint>0</p9:BrakeCurrentSetPoint>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpTreadmillCommands</Name>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>ZeroYAxis</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Manipulator</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Calibration</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AxisConfiguration</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Axis</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p10:Axis">
                            <Value>Y1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p10:Axis">
                            <Value>Y2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="BitwiseOr" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>ZeroAxis</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>axisConfiguration</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>axisConfiguration</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Axis</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>OffsetRegister85</scr:Name>
                          <scr:Expression>it + 85</scr:Expression>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>TargetRegister</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TargetRegister</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Address" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="harp:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="harp:CreateMessagePayload">
                            <harp:Address>0</harp:Address>
                            <harp:PayloadType>S32</harp:PayloadType>
                            <harp:Value>0</harp:Value>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>StepperDriverCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="p9:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p9:CreateBrakeCurrentSetPointPayload">
                <p9:BrakeCurrentSetPoint>0</p9:BrakeCurrentSetPoint>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpTreadmillCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="13" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="13" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="13" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source4" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="21" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="21" Label="Source2" />
            <Edge From="20" To="21" Label="Source3" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="26" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source2" />
            <Edge From="26" To="27" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Delay">
          <gl:DueTime>PT2S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>