WorkflowBuilder(Version=2.8.1)
Bonsai.IO.ReadAllText(Path=DataSchemas\ExampleSession.yml)
-> AindVrForagingDataSchema.DeserializeFromYaml(Type=TypeMapping<AindVrForagingDataSchema.AindVrForagingSession>)
-> Take(Count=1)
-> AsyncSubject SessionSchema

GroupWorkflow ProtocolValidation
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector="Hardware.MainCamera.FrameRate,Hardware.MainCamera.Exposure")
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: ((1.0 / Item1) * 1000000) < Item2 + 1000
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> ThrowException(Message="Camera frame rate and exposure settings are not compatible.")

    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=EnvironmentStatistics.Patches)
    -> MemberSelector(Selector=Count) => #8
    SubscribeSubject TransitionMatrix
    -> MemberSelector(Selector=Rows) => #10
    #8, #10 -> Zip
    -> NotEqual
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> ThrowException(Message="Number of patches does not match transition matrix size.")

    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=Hardware.Valves.Water)
    -> MemberSelector(Selector=Calibration)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it == null
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> ThrowException(Message="No water valve calibration settings found!")

    SubscribeSubject SessionSchema => #22
    -> MemberSelector(Selector=TaskLogicControl.TaskStage)
    -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskStage>(Value=Habituation)) => #24
    #22 -> MemberSelector(Selector=TaskLogicControl.HabituationSettings)
    -> Bonsai.Scripting.Expressions.ExpressionTransform isNull => #26
      Expression: it == null
    #24, #26 -> Zip
    -> BitwiseAnd
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> ThrowException(Message='Stage is defined as "Habituation" but no settings were found')

    SubscribeSubject SessionSchema => #32
    -> MemberSelector(Selector=TaskLogicControl.TaskStage)
    -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskStage>(Value=Foraging)) => #34
    #32 -> MemberSelector(Selector=TaskLogicControl.VirtualSiteGeneration)
    -> Bonsai.Scripting.Expressions.ExpressionTransform isNull => #36
      Expression: it == null
    #34, #36 -> Zip
    -> BitwiseAnd
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> ThrowException(Message='Stage defined as "Foraging" but not settings were found.')

Annotation PinOut
  Text:
    | Function | HarpBehavior Pin | Notes |
    | --- | ----------- | ----------- |
    | Camera Trigger | DO0 |  |
    | Water Valve | Port0 Supply |  Use a poke breakout |
    | Lickometer | Port0 DI |  Use a poke breakout |
    | Encoder B | Port2 DIO | Use a poke breakout |
    | Encoder A | Port2 DI | Use a poke breakout |
    | Thermistor | ADC0 |  |
    | Pressure Sensor | ADC1 |  |
    | Photodiode | DI3 |  |
    | Servo Motor | DO2 |  |
    | Audio Buzzer | DO1 |  |
-> GroupWorkflow HarpBehavior
    BehaviorSubject<Bonsai.Harp.HarpMessage> HarpBehaviorCommands => #0
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=Hardware.HarpBehaviorBoard.PortName)
    -> PropertyMapping(PortName) => #3
    #0, #3 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=false, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM5)
    -> PublishSubject HarpBehaviorEvents
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.TimestampedTimestampSeconds)
    -> PublishSubject HarpBehaviorHeartBeat

    SubscribeSubject HarpBehaviorHeartBeat => #8
    SubscribeSubject StartExperiment => #9
    #8, #9 -> Zip => #10
    Annotation ForceRegisterDump(Text="") => #11
    #10, #11 -> Bonsai.Harp.CreateMessage
      MessageType=Write
      Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
    -> Take(Count=1)
    -> MulticastSubject HarpBehaviorCommands

    SubscribeSubject HarpBehaviorHeartBeat
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEventEnablePayload(EventEnable="PortDI PortDIO AnalogData Camera0 Camera1"))
    -> Take(Count=1)
    -> MulticastSubject HarpBehaviorCommands

    GroupWorkflow CameraControl
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
        -> MulticastSubject HarpBehaviorCommands

    GroupWorkflow WaterValve
        SubscribeSubject HarpBehaviorHeartBeat => #0
        Annotation Valve+Speaker(Text="") => #1
        #0, #1 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable="SupplyPort0 DO1"))
        -> Take(Count=1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Double> ValveOpenTimeMs
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Reactive.Unit> TriggerValve
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
        -> MulticastSubject HarpBehaviorCommands
        -> WorkflowOutput

    GroupWorkflow Lickometer
        SubscribeSubject HarpBehaviorEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #2
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged => #6
        #6, #2 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent
        -> WorkflowOutput

    GroupWorkflow Adc
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> PublishSubject AnalogData

        SubscribeSubject AnalogData
        -> MemberSelector(Selector="Value.AnalogInput0,Seconds")
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject ThermistorData

        SubscribeSubject AnalogData
        -> MemberSelector(Selector="Value.AnalogInput1,Seconds")
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject PressureSensorData

    GroupWorkflow Encoder
        SubscribeSubject AnalogData
        -> MemberSelector(Selector="Value.Encoder,Seconds") => #1
        -> MemberSelector(Selector=Item1) => #2
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=Hardware.Treadmill.WheelDiameter)
        -> Bonsai.Scripting.Expressions.ExpressionTransform Perimeter => #5
          Expression: it * Math.Pi
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=Hardware.Treadmill.PulsesPerRevolution) => #7
        #5, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform CentimetersPerTick => #9
          Expression: Item1 / Item2
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=Hardware.Treadmill.InvertDirection) => #11
        #9, #11 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item2 ? -1.0 * Item1 : Item1
        -> PropertyMapping(RangeMax) => #14
        #2, #14 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=-0.00071905349432139424, RescaleType=Linear) => #15
        #1 -> MemberSelector(Selector=Item2) => #16
        #15, #16 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject EncoderData

        SubscribeSubject HarpBehaviorHeartBeat => #20
        Annotation "Set displacement mode"(Text=https://github.com/harp-tech/device.behavior/pull/12) => #21
        #20, #21 -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=83, PayloadType=U8, Value=1))
        -> MulticastSubject HarpBehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2))
        -> Take(Count=1)
        -> MulticastSubject HarpBehaviorCommands

    GroupWorkflow Photodiode
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #1
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DI3))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged => #5
        #1 -> MemberSelector(Selector=Seconds) => #6
        #5, #6 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject PhotodiodeEvent

    GroupWorkflow Buzzer
        BehaviorSubject<System.Double> AudioDuration
        -> Multiply(Operand=IntProperty(Value=1000))
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Int32> AudioFrequency
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmFrequencyDO1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Reactive.Unit> AudioTrigger
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO1))
        -> MulticastSubject HarpBehaviorCommands

        GroupWorkflow InitialSettings => #10
            SubscribeSubject HarpBehaviorHeartBeat
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO1Payload(PwmDutyCycleDO1=50))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=Hardware.Speaker)
            -> MemberSelector(Selector=PwmDefaultPulseDuration)
            -> MulticastSubject AudioDuration

            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=Hardware.Speaker)
            -> MemberSelector(Selector=PwmFrequency)
            -> MulticastSubject AudioFrequency
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1) => #12
        #10, #12 -> SubscribeWhen

    GroupWorkflow ServoMotor
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateDisableServosPayload(DisableServos=ServoOutput2))
        -> MulticastSubject HarpBehaviorCommands
        -> IntProperty(Value=20000)
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.ServoMotor2Period)
        -> MulticastSubject HarpBehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableServosPayload(EnableServos=ServoOutput2))
        -> MulticastSubject HarpBehaviorCommands
        -> IntProperty(Value=2000)
        -> MulticastSubject ServoPosition

        BehaviorSubject<System.Int32> ServoPosition => #11
        Annotation 1000:2000(Text="") => #12
        #11, #12 -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.ServoMotor2Pulse)
        -> MulticastSubject HarpBehaviorCommands

    GroupWorkflow Odor
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="SupplyPort1 SupplyPort2"))
        -> Take(Count=1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Boolean> OdorValve1 => #5
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1)) => #7
        #5 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=SupplyPort1)) => #10
        #7, #10 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Boolean> OdorValve2 => #13
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort2)) => #15
        #13 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=SupplyPort2)) => #18
        #15, #18 -> Merge
        -> MulticastSubject HarpBehaviorCommands

SubscribeSubject HarpBehaviorEvents
-> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
-> Harp.Behavior.FilterRegister(FilterType=Include, Register=Harp.Behavior.AnalogData)
-> BehaviorSubject HarpTimestampSource

GroupWorkflow InitVariables
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AindVrForagingDataSchema.VirtualSite> ActiveSiteLabel
    BehaviorSubject<AindVrForagingDataSchema.Logging.SoftwareEvent> SoftwaveEvents
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging

GroupWorkflow Config
    GroupWorkflow SessionSettings
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=Metadata.RngSeed)
        -> PropertyMapping(Seed)
        -> Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Take(Count=1)
        -> AsyncSubject RngSeed

        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=Hardware.Screen.TextureAssetDirectory)
        -> PropertyMapping(Value)
        -> PropertySource<Bonsai.IO.GetFiles,System.String>(MemberName=Path, Value=Textures)
        -> Take(Count=1)
        -> AsyncSubject TextureBankPath

        Annotation(Text="A small value that is used to sum to the visual horizon to instantiate resources.")
        -> FloatProperty(Value=0)
        -> Take(Count=1)
        -> AsyncSubject SigmaZ

        ExternalizedMapping(Value(DisplayName=FarClipHorizon))
        -> FloatProperty(Value=1000)
        -> Take(Count=1)
        -> AsyncSubject FarClipHorizon

        Annotation(Text="The distance used to determine whether a segment should be disposed.") => #20
        ExternalizedMapping(Value(DisplayName=DisposingTreshold)) => #21
        #20, #21 -> FloatProperty(Value=20)
        -> Take(Count=1)
        -> AsyncSubject DisposingTreshold

    GroupWorkflow PatchStatistics
        BehaviorSubject<System.Boolean> RewardDepleted
        BehaviorSubject<System.Single> RewardAvailable
        BehaviorSubject<AindVrForagingDataSchema.PatchStatistics> ActivePatch

        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=EnvironmentStatistics.TransitionMatrix)
        -> MemberSelector(Selector=Data)
        -> FormatTransitionMatrix(NormalizeRows=true)
        -> BehaviorSubject TransitionMatrix

        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=EnvironmentStatistics.Patches)
        -> Merge
        -> ToDictionary(KeySelector=StateIndex, ElementSelector=it)
        -> Take(Count=1)
        -> AsyncSubject PatchStatistics

        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=EnvironmentStatistics.FirstState) => #15
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value) => #17
        #15 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany RandomStart => #19
            SubscribeSubject RngSeed => #0
            SubscribeSubject TransitionMatrix
            -> MemberSelector(Selector=Rows)
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Upper) => #4
            #0, #4 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Take(Count=1)
            -> WorkflowOutput
        #17, #19 -> Merge
        -> Take(Count=1)
        -> BehaviorSubject ActiveStateIndex

        SubscribeSubject ActiveStateIndex
        -> CreateObservable UpdateState
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject PatchIndex

            SubscribeSubject PatchStatistics => #3
            SubscribeSubject PatchIndex
            -> PropertyMapping(Value) => #5
            #3, #5 -> Index(Operand=IntProperty(Value=0))
            -> Take(Count=1)
            -> AsyncSubject ThisPatch

            SubscribeSubject ThisPatch
            -> MulticastSubject ActivePatch

            SubscribeSubject ThisPatch
            -> MemberSelector(Selector=RewardSpecifications.Amount)
            -> MulticastSubject RewardAvailable

            SubscribeSubject GiveReward
            -> SelectMany --RewardsAvailable
                SubscribeSubject RewardAvailable => #0
                WorkflowInput Source1 => #1
                #0, #1 -> Zip
                -> Take(Count=1)
                -> Subtract
                -> MulticastSubject RewardAvailable
                -> WorkflowOutput

            SubscribeSubject RewardAvailable
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> MulticastSubject RewardDepleted
        -> Switch

    Annotation(Text="")
    -> GroupWorkflow Hardware
        GroupWorkflow ScreenConfiguration
            Bonsai.Shaders.CreateWindow
              Width=1000
              Height=1000
              Title=VrForaging
              VSync=Off
              SwapSync=false
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              CursorVisible=false
              Location=nil
              WindowBorder=Resizable
              WindowState=Fullscreen
              DisplayDevice=Second
              TargetRenderFrequency=60
              TargetUpdateFrequency=120
              RenderState=""
              GraphicsMode
                ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
                Depth=16
                Stencil=0
                Samples=0
                AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
                Buffers=2
                Stereo=false
            -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
            -> Bonsai.Shaders.ShaderResources
              Shaders
                ShaderConfiguration=Bonsai.Shaders.Material
                  Name=ScaledTexturedModel
                  RenderState=""
                  ShaderUniforms=""
                  BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=textureDiffuse, TextureSlot=Texture0, TextureTarget=Texture2D))
                  FramebufferAttachments=""
                  VertexShader=BonVision:Shaders.TexturedModel.vert
                  FragmentShader=Shaders\ScaledTexturedModel.frag
            -> Bonsai.Resources.LoadResources
            -> WorkflowOutput

            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=Hardware.Screen.MonitorCalibrationDirectory)
            -> PropertyMapping(Directory)
            -> IncludeWorkflow(Path=Extensions\LoadAllScreensCalibration.bonsai, Directory=Calibration\Monitors)
            -> Take(Count=1)
            -> AsyncSubject ScreenCalibration

            GroupWorkflow RenderLoop
                Bonsai.Shaders.RenderFrame => #0
                SubscribeSubject FarClipHorizon
                -> PropertyMapping(FarClip) => #2
                #0, #2 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0)) => #3
                -> MemberSelector(Selector=ViewMatrix)
                -> Bonsai.Shaders.RotateY(Order=Append, Angle=-3.14159274) => #5
                #5, #3 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1 as ViewMatrix,
                    Item2.ProjectionMatrix as ProjectionMatrix,
                    Item2.Light as Light)
                -> PublishSubject Draw3DStim
                -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DimGray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #9
                SubscribeSubject ScreenCalibration
                -> MemberSelector(Selector=Left)
                -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #12
                #9, #12 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=60.0001403060998, Z=0), Translation(X=-20, Y=0, Z=-8))
                -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333333343, Height=1)
                SubscribeSubject ScreenCalibration
                -> MemberSelector(Selector=Center)
                -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #17
                #9, #17 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-12.7))
                -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333333343, Y=0, Width=0.333333343, Height=1)
                SubscribeSubject ScreenCalibration
                -> MemberSelector(Selector=Right)
                -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #22
                #9, #22 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=-60.0001403060998, Z=0), Translation(X=20, Y=0, Z=-8))
                -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.6666667, Y=0, Width=0.333333, Height=1)
                -> PublishSubject PostDrawing

            GroupWorkflow LoadTextureBank
                SubscribeSubject TextureBankPath
                -> PropertyMapping(Path)
                -> Bonsai.IO.GetFiles(Path=Textures, SearchPattern=*.jpg, SearchOption=TopDirectoryOnly)
                -> Merge
                -> CreateObservable LoadTexture
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject TexturePath

                    SubscribeSubject TexturePath
                    -> Bonsai.IO.GetFileNameWithoutExtension => #4
                    SubscribeSubject TexturePath
                    -> PropertyMapping(FileName)
                    -> Bonsai.Shaders.LoadImage => #7
                      Width=nil
                      Height=nil
                      InternalFormat=Rgba
                      WrapS=Repeat
                      WrapT=Repeat
                      MinFilter=Linear
                      MagFilter=Linear
                      FileName=Textures\wall_4.jpg
                      ColorType=Unchanged
                      FlipMode=Vertical
                    #4, #7 -> Zip
                    -> WorkflowOutput
                -> Merge
                -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
                -> AsyncSubject TextureBank

            GroupWorkflow ScreenBrightnessControl
                FloatProperty(Value=1)
                -> Take(Count=1)
                -> BehaviorSubject ScreenBrightness

                SubscribeSubject PostDrawing
                -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
                -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #5
                SubscribeSubject ScreenBrightness
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: 1.0 - it
                -> PropertyMapping(ColorA) => #8
                #5, #8 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=2, ExtentY=2, LocationX=0, LocationY=0, Layer=100, Angle=0, ColorR=0, ColorG=0, ColorB=0, ColorA=0)

        GroupWorkflow HarpDevices

        GroupWorkflow Cameras
            GroupWorkflow MainCamera
                SubscribeSubject SessionSchema
                -> MemberSelector(Selector=Hardware.MainCamera.FrameRate)
                -> Take(Count=1)
                -> AsyncSubject CameraFrameRate

                SubscribeSubject CameraFrameRate
                -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
                -> MulticastSubject HarpBehaviorCommands

                SubscribeSubject SessionSchema
                -> MemberSelector(Selector=Hardware.MainCamera)
                -> PropertyMapping
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                -> AindSpinnakerCapture(Index=nil, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1) => #10
                SubscribeSubject HarpBehaviorEvents
                -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
                -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #13
                -> MemberSelector(Selector=Value)
                -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
                -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
                -> Condition => #17
                    WorkflowInput Source1
                    -> WorkflowOutput
                #17, #13 -> WithLatestFrom
                -> MemberSelector(Selector=Item2.Seconds) => #19
                #10, #19 -> Zip
                -> Bonsai.Harp.CreateTimestamped
                -> PublishSubject MainCameraFrameEvent

            GroupWorkflow AuxiliaryCameras
                SubscribeSubject SessionSchema
                -> MemberSelector(Selector=Hardware.AuxiliaryCamera0.Index)
                -> PropertyMapping(Index)
                -> Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="") => #3
                SubscribeSubject HarpTimestampSource => #4
                #3, #4 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped
                -> PublishSubject AuxiliaryCamera0

                SubscribeSubject SessionSchema
                -> MemberSelector(Selector=Hardware.AuxiliaryCamera1.Index)
                -> PropertyMapping(Index)
                -> Bonsai.Video.VideoCaptureDevice(Index=1, CaptureProperties="") => #11
                SubscribeSubject HarpTimestampSource => #12
                #11, #12 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped
                -> PublishSubject AuxiliaryCamera1

Annotation Defer(Text="Defer just to keep the variable polution a bit more contained")
-> Defer Logging => #14
    SubscribeSubject SessionSchema
    -> IncludeWorkflow(Path=Extensions\GenerateRootLoggingPath.bonsai)
    -> Take(Count=1)
    -> AsyncSubject LoggingRootPath

    GroupWorkflow HarpLogging
        SubscribeSubject HarpBehaviorEvents => #0
        Annotation Issue(Text=https://github.com/bonsai-rx/harp/issues/72) => #1
        #0, #1 -> Disable Harp.Behavior.GroupByRegister
        -> Bonsai.Harp.GroupByRegister => #3
        IncludeWorkflow(Path=Extensions\GenerateHarpLoggingPath.bonsai, LogName=Behavior, Extension=bin)
        -> PropertyMapping(FileName) => #5
        #3, #5 -> Bonsai.Harp.MessageWriter(Suffix=None, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil)
        -> WorkflowOutput

    GroupWorkflow Camera
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=Hardware.MainCamera.FrameRate)
        -> PropertyMapping(EncodingFrameRate)
        -> IncludeWorkflow(Path=Extensions\GenerateSpinnakerLoggingPath.bonsai, LogName=MainCamera, EncodingFrameRate=60, VideoExtension=avi, MetadataExtension=csv, Codec=FMP4)
        -> AsyncSubject MainCameraLoggerPath

        SubscribeSubject MainCameraFrameEvent => #5
        SubscribeSubject MainCameraLoggerPath
        -> MemberSelector(Selector=Metadata)
        -> PropertyMapping(FileName) => #8
        #5, #8 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp")
        -> MemberSelector(Selector=Value.Image) => #10
        SubscribeSubject MainCameraLoggerPath
        -> PropertyMapping(FileName(Selector=Video), FrameRate(Selector=Logger.EncodingFrameRate), FourCC(Selector=Logger.Codec)) => #12
        #10, #12 -> Bonsai.Vision.VideoWriter(Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)

    SubscribeSubject SessionSchema
    -> AindVrForagingDataSchema.SerializeToJson => #7
    SubscribeSubject LoggingRootPath
    -> Format(Format={0}\config.json)
    -> PropertyMapping(Path) => #10
    #7, #10 -> AindVrForagingDataSchema.Logging.JsonWriter(Suffix=None, Overwrite=false)

    SubscribeSubject SoftwaveEvents => #12
    SubscribeSubject HarpTimestampSource => #13
    #12, #13 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> TimestampSoftwareEvent
    -> IncludeWorkflow(Path=Extensions\LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents)
SubscribeSubject StartLogging => #15
#14, #15 -> SubscribeWhen

Annotation(Text="")
-> GroupWorkflow OperationControl
    GroupWorkflow PositionControl => #0
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=TaskLogicControl.PositionControl.StopResponseConfig)
        -> MemberSelector(Selector=VelocityThreshold)
        -> BehaviorSubject StopVelocityThreshold

        GroupWorkflow InitialPosition => #4
            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=TaskLogicControl.PositionControl.InitialPosition)
            -> MemberSelector(Selector=Z) => #2
            -> DoubleProperty(Value=0) => #3
            #2, #3 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject EncoderData => #5
        #4, #5 -> Concat => #6
        -> MemberSelector(Selector=Value)
        -> Accumulate
        -> InputMapping(Z(Selector=it)) => #9
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=TaskLogicControl.PositionControl.InitialPosition)
        -> PropertyMapping(X(Selector=X), Y(Selector=Y)) => #12
        #9, #12 -> Bonsai.Shaders.CreateVector3(X=0, Y=4, Z=-1) => #13
        #6 -> MemberSelector(Selector=Seconds) => #14
        #13, #14 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> BehaviorSubject CurrentPosition

        SubscribeSubject EncoderData => #19
        -> MemberSelector(Selector=Value) => #20
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=TaskLogicControl.PositionControl.StopResponseConfig)
        -> MemberSelector(Selector=FrequencyFilterCutoff)
        -> PropertyMapping(Cutoff1) => #24
        #20, #24 -> Bonsai.Dsp.FrequencyFilter(SampleRate=1000, Cutoff1=5, Cutoff2=0, KernelLength=60, FilterType=LowPass)
        -> Bonsai.Scripting.Expressions.ExpressionTransform cm/second => #26
          Expression: it * 1000
        SubscribeSubject StopVelocityThreshold
        -> PropertyMapping(Value) => #28
        #26, #28 -> LessThan(Operand=DoubleProperty(Value=10))
        -> DistinctUntilChanged => #30
        #19 -> MemberSelector(Selector=Seconds) => #31
        #30, #31 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> BehaviorSubject IsStopped

        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=TaskLogicControl.PositionControl.StopResponseConfig)
        -> MemberSelector(Selector=FrequencyFilterCutoff)

        SubscribeSubject CurrentPosition
        -> MemberSelector(Selector=Value) => #39
        Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-100000)
        -> Take(Count=1) => #41
        #39, #41 -> Scan => #42
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Accumulation.Z > Value.Z ? Accumulation : Value
            -> WorkflowOutput
        Annotation "Max(Z)"(Text="") => #43
        #42, #43 -> BehaviorSubject MaxPosition
    SubscribeSubject StartExperiment => #1
    #0, #1 -> SubscribeWhen

    GroupWorkflow OdorControl
        BehaviorSubject<AindVrForagingDataSchema.Odor> OdorControl
        -> WorkflowOutput

        SubscribeSubject OdorControl => #2
        Source2=#2 -> Condition IsIndex?
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MemberSelector(Selector=ValveState)
        -> MulticastSubject OdorValve1 => #5
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=TaskLogicControl.OdorControl.ValveMaxOpenTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(MaxOpenTime) => #9
        #5, #9 -> IncludeWorkflow(Path=Extensions\WaitForMaxOpenTime.bonsai, MaxOpenTime=PT5S)
        -> MulticastSubject OdorValve1
        #2 -> Condition IsIndex?
            WorkflowInput Source1
            -> MemberSelector(Selector=Index) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> MemberSelector(Selector=ValveState)
        -> MulticastSubject OdorValve2 => #14
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=TaskLogicControl.OdorControl.ValveMaxOpenTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(MaxOpenTime) => #18
        #14, #18 -> IncludeWorkflow(Path=Extensions\WaitForMaxOpenTime.bonsai, MaxOpenTime=PT5S)
        -> MulticastSubject OdorValve2

    GroupWorkflow RewardControl
        BehaviorSubject<System.Double> GiveReward
        -> WorkflowOutput

        SubscribeSubject GiveReward => #2
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=Hardware.Valves.Water)
        -> MemberSelector(Selector=Calibration) => #5
        #2, #5 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime
          Expression: Item1 * Item2.Slope + Item2.Intercept
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> InputMapping(Value(Selector=it))
        -> IntProperty(Value=0)
        -> Condition GreaterThan0
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MulticastSubject ValveOpenTimeMs
        -> Unit
        -> MulticastSubject TriggerValve

        SubscribeSubject GiveReward => #15
        DoubleProperty(Value=0) => #16
        #15, #16 -> Scan
            WorkflowInput Source1
            -> MemberSelector(Selector="Accumulation,Value")
            -> Add
            -> WorkflowOutput
        -> BehaviorSubject SessionAccumulatedReward

    GroupWorkflow FeedbackControl
        BehaviorSubject<System.Reactive.Unit> ChoiceFeedback

        SubscribeSubject ChoiceFeedback
        -> Unit
        -> MulticastSubject AudioTrigger
        -> WorkflowOutput

GroupWorkflow TaskLogic => #19
    Annotation(Text="")
    -> GroupWorkflow ProceduralGeneration
        GroupWorkflow CorridorDrawing
            ExternalizedMapping(Value(DisplayName=CorridorLength))
            -> FloatProperty(Value=120)
            -> Take(Count=1)
            -> AsyncSubject VisualCorridorLength

            ExternalizedMapping(Value(DisplayName=CorridorWidth))
            -> FloatProperty(Value=40)
            -> Take(Count=1)
            -> AsyncSubject CorridorWidth

            ExternalizedMapping(Value(DisplayName=CorridorHeight))
            -> FloatProperty(Value=30)
            -> Take(Count=1)
            -> AsyncSubject CorridorHeight

            GroupWorkflow DefineTextures
                AindVrForagingDataSchema.TextureSize(X=40, Y=40)
                -> PropertyMapping(TextureSize)
                -> AindVrForagingDataSchema.Floor(Name=floor)
                -> PropertyMapping(Floor) => #3
                AindVrForagingDataSchema.TextureSize(X=40, Y=40)
                -> PropertyMapping(TextureSize)
                -> AindVrForagingDataSchema.Floor(Name=RightWall)
                -> PropertyMapping(RightWall) => #7
                AindVrForagingDataSchema.TextureSize(X=40, Y=40)
                -> PropertyMapping(TextureSize)
                -> AindVrForagingDataSchema.Floor(Name=LeftWall)
                -> PropertyMapping(LeftWall) => #11
                AindVrForagingDataSchema.TextureSize(X=40, Y=40)
                -> PropertyMapping(TextureSize)
                -> AindVrForagingDataSchema.Floor(Name=Ceiling)
                -> PropertyMapping(Ceiling) => #15
                #3, #7, #11, #15 -> AindVrForagingDataSchema.Textures
                -> WorkflowOutput
            -> Take(Count=1)
            -> AsyncSubject TextureDefinition

            Defer Initialize => #15
                SubscribeSubject SessionSchema
                -> MemberSelector(Selector=TaskLogicControl.PositionControl.InitialPosition)
                -> MemberSelector(Selector=Z)
                -> Take(Count=1)
                -> AsyncSubject InitPosition

                SubscribeSubject FarClipHorizon => #5
                SubscribeSubject InitPosition => #6
                #5, #6 -> Zip
                -> Subtract => #8
                SubscribeSubject VisualCorridorLength
                -> PropertyMapping(Value) => #10
                #8, #10 -> Divide(Operand=FloatProperty(Value=120))
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Math.Ceiling(it)
                -> Take(Count=1)
                -> SelectMany Range
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject Count

                    SubscribeSubject InitPosition
                    -> Take(Count=1)
                    -> PropertyMapping(Start) => #5
                    SubscribeSubject Count
                    -> PropertyMapping(Count) => #7
                    #5, #7 -> Range(Start=-1, Count=9)
                    -> WorkflowOutput
                -> InputMapping(Value(Selector=it))
                -> DoubleProperty(Value=7)
                -> WorkflowOutput
            GroupWorkflow Update => #16
                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value) => #1
                SubscribeSubject MaxPosition => #2
                #1, #2 -> CombineLatest
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector="Item1.Z,Item2.Z")
                    -> GreaterThanOrEqual
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1.Z) => #5
                SubscribeSubject FarClipHorizon
                -> PropertyMapping(Value) => #7
                #5, #7 -> Add(Operand=FloatProperty(Value=1000)) => #8
                SubscribeSubject SigmaZ
                -> PropertyMapping(Value) => #10
                #8, #10 -> Add(Operand=FloatProperty(Value=0)) => #11
                SubscribeSubject VisualCorridorLength
                -> PropertyMapping(Value) => #13
                #11, #13 -> Divide(Operand=FloatProperty(Value=120))
                -> InputMapping(TypeMapping=TypeMapping<System.Double>)
                -> Bonsai.Numerics.Floor
                -> WorkflowOutput
            #15, #16 -> Concat
            -> DistinctUntilChanged => #18
            SubscribeSubject VisualCorridorLength
            -> PropertyMapping(Value) => #20
            #18, #20 -> Multiply(Operand=DoubleProperty(Value=120)) => #21
            #18, #21 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Id,
                Item2 as Start
                )
            -> InputMapping(StartPosition(Selector=Start), Id(Selector=Id)) => #24
            SubscribeSubject VisualCorridorLength
            -> PropertyMapping(Length) => #26
            SubscribeSubject CorridorWidth
            -> PropertyMapping(Width(Selector=it)) => #28
            SubscribeSubject CorridorHeight
            -> PropertyMapping(Height) => #30
            SubscribeSubject TextureDefinition
            -> PropertyMapping(Textures) => #32
            #24, #26, #28, #30, #32 -> IncludeWorkflow(Path=Extensions\CreateCorridorSpecs.bonsai, Height=120, Id=8, Length=120, StartPosition=960, Width=120)
            -> ReplaySubject VisualCorridorSpecs(BufferSize=nil)

            SubscribeSubject VisualCorridorSpecs
            -> IncludeWorkflow(Path=Extensions\DrawSegment.bonsai)
            -> Merge
            -> WorkflowOutput

        GroupWorkflow PatchGeneration
            BehaviorSubject<AindVrForagingDataSchema.VirtualSite> SiteSpecs

            SubscribeSubject SiteSpecs
            -> GroupWorkflow InstantiateSite
                WorkflowInput Source1
                -> CreateObservable InstantiateSite
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject ThisSiteSpecs

                    SubscribeSubject CurrentPosition
                    -> MemberSelector(Selector=Value)
                    -> MemberSelector(Selector=Z) => #5
                    SubscribeSubject ThisSiteSpecs
                    -> MemberSelector(Selector=StartPosition) => #7
                    SubscribeSubject ThisSiteSpecs
                    -> MemberSelector(Selector="Length,StartPosition")
                    -> Add => #10
                    #5, #7, #10 -> CombineLatest
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: (Item1 >= Item2) && (Item1 < Item3)
                    -> BehaviorSubject IsInSite

                    Defer SiteLogic => #14
                        GroupWorkflow RewardControl => #0
                            SubscribeSubject ThisSiteSpecs
                            -> MemberSelector(Selector=Reward)
                            -> Take(Count=1)
                            -> AsyncSubject ThisRewardControl

                            SubscribeSubject IsStopped
                            -> CreateObservable CheckStop
                                SubscribeSubject ThisRewardControl
                                -> MemberSelector(Selector=OperantLogic.StopDuration)
                                -> PropertyMapping(DueTime)
                                -> Bonsai.Shaders.Timer(DueTime=PT0S) => #3
                                WorkflowInput Source1 => #4
                                #3, #4 -> WithLatestFrom
                                -> MemberSelector(Selector=Item2)
                                -> WorkflowOutput
                            -> Switch
                            -> Condition => #7
                                WorkflowInput Source1
                                -> MemberSelector(Selector=Value)
                                -> WorkflowOutput
                            Annotation LockedResponse(Text="") => #8
                            #7, #8 -> Take(Count=1)
                            -> Sink LockedChoiceFeedback => #10
                                WorkflowInput Source1
                                -> Unit
                                -> MulticastSubject ChoiceFeedback
                                -> WorkflowOutput
                            -> Condition Operant
                                SubscribeSubject ThisRewardControl
                                -> MemberSelector(Selector=OperantLogic.IsOperant)
                                -> WorkflowOutput
                            -> SelectMany WaitForLick => #12
                                SubscribeSubject ThisRewardControl
                                -> MemberSelector(Selector=OperantLogic.TimeToCollect)
                                -> PropertyMapping(DueTime)
                                -> Bonsai.Shaders.Timer(DueTime=PT0S)
                                -> BooleanProperty(Value=false) => #4
                                SubscribeSubject IsStopped => #5
                                SubscribeSubject ThisRewardControl
                                -> MemberSelector(Selector=OperantLogic.ChoiceGracePeriod)
                                -> PropertyMapping(DueTime) => #8
                                #5, #8 -> Bonsai.Shaders.DelaySubscription(DueTime=PT0S)
                                -> MemberSelector(Selector=Value)
                                -> BitwiseNot
                                -> Condition
                                    WorkflowInput Source1
                                    -> WorkflowOutput
                                -> BooleanProperty(Value=false) => #13
                                SubscribeSubject LickEvent
                                -> BooleanProperty(Value=true) => #15
                                #4, #13, #15 -> Merge
                                -> Take(Count=1)
                                -> WorkflowOutput
                            -> Condition FailToCollect
                                WorkflowInput Source1
                                -> WorkflowOutput
                            -> BooleanProperty(Value=false) => #14
                            #12 -> Condition Success
                                WorkflowInput Source1
                                -> WorkflowOutput
                            -> Unit => #16
                            #10 -> Condition Pavlovian
                                SubscribeSubject ThisRewardControl
                                -> MemberSelector(Selector=OperantLogic.IsOperant)
                                -> BitwiseNot
                                -> WorkflowOutput
                            -> Unit => #18
                            #16, #18 -> Merge
                            -> Take(Count=1) => #20
                            Annotation TODO(Text="") => #21
                            #20, #21 -> SelectMany DetermineReward
                                SubscribeSubject ThisRewardControl
                                -> MemberSelector(Selector=Probability) => #1
                                SubscribeSubject RngSeed
                                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                                -> Bonsai.Numerics.Distributions.Sample => #4
                                #1, #4 -> Zip
                                -> GreaterThan => #6
                                SubscribeSubject ThisRewardControl
                                -> MemberSelector(Selector=Amount) => #8
                                #6, #8 -> Zip
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: Item1 ? Item2 : 0
                                -> Take(Count=1)
                                -> WorkflowOutput
                            -> MulticastSubject GiveReward
                            -> BooleanProperty(Value=true) => #24
                            #14, #24 -> Merge
                            -> Take(Count=1)
                            -> WorkflowOutput
                        SubscribeSubject ThisSiteSpecs
                        -> MemberSelector(Selector=Reward)
                        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai)
                        -> Take(Count=1) => #4
                        #0, #4 -> SubscribeWhen

                        GroupWorkflow OdorControl => #6
                            Annotation OdorControl(Text="")
                            -> SubscribeSubject IsInSite
                            -> DistinctUntilChanged
                            -> InputMapping(ValveState(Selector=it)) => #3
                            SubscribeSubject ThisSiteSpecs
                            -> MemberSelector(Selector=Odor)
                            -> PropertyMapping(Concentration(Selector=Concentration), Index(Selector=Index)) => #6
                            #3, #6 -> IncludeWorkflow(Path=Extensions\GenerateOdorControl.bonsai, Concentration=1, Index=0, ValveState=false)
                            -> MulticastSubject OdorControl
                            -> WorkflowOutput
                        SubscribeSubject ThisSiteSpecs
                        -> MemberSelector(Selector=Odor)
                        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai)
                        -> Take(Count=1) => #10
                        #6, #10 -> SubscribeWhen

                        SubscribeSubject ThisSiteSpecs
                        -> MemberSelector(Selector=Render.Brightness)
                        -> Condition
                            WorkflowInput Source1
                            -> MemberSelector(Selector=HasValue)
                            -> WorkflowOutput
                        -> MemberSelector(Selector=Value)
                        -> MulticastSubject ScreenBrightness
                    SubscribeSubject IsInSite
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> IncludeWorkflow(Path=Extensions\DebugActiveSite.bonsai)
                    -> Take(Count=1) => #18
                    #14, #18 -> SubscribeWhen => #19
                    GroupWorkflow DisposeSite => #20
                        SubscribeSubject CurrentPosition
                        -> MemberSelector(Selector=Value)
                        -> MemberSelector(Selector=Z) => #2
                        SubscribeSubject DisposingTreshold => #3
                        SubscribeSubject ThisSiteSpecs
                        -> MemberSelector(Selector="Length,StartPosition")
                        -> Add => #6
                        #3, #6 -> CombineLatest
                        -> Add => #8
                        #2, #8 -> CombineLatest
                        -> GreaterThan
                        -> Condition
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #19, #20 -> TakeUntil
                    -> LastOrDefault => #22
                    SubscribeSubject ThisSiteSpecs => #23
                    #22, #23 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\InstantiateSite.bonsai)
            -> Merge

    Annotation(Text="")
    -> Defer StateMachine => #3
        Bonsai.Shaders.Timer(DueTime=PT0S)
        -> Take(Count=1) => #1
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=TaskLogicControl.VirtualSiteGeneration.InterPatchSite.LengthDistribution)
        -> PropertyMapping(Minimum(Selector=Minimum), Maximum(Selector=Maximum), Average(Selector=Mean)) => #4
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=TaskLogicControl.VirtualSiteGeneration.InterPatchSite.Label)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.ToString()
        -> PropertyMapping(Label(Selector=it)) => #8
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=TaskLogicControl.VirtualSiteGeneration.InterPatchSite.Brightness)
        -> PropertyMapping(Brightness) => #11
        #1, #4, #8, #11 -> IncludeWorkflow(Path=Extensions\AddInterPatchSite.bonsai, Minimum=10, Maximum=50, Average=25, Label=InterPatchSite)
        -> SelectMany Patch
            WorkflowInput Source1
            -> Take(Count=1)
            -> BehaviorSubject EntrySite

            BooleanProperty(Value=false)
            -> Take(Count=1)
            -> BehaviorSubject HasRefusedLastReward

            SubscribeSubject ChoiceFeedback
            -> BooleanProperty(Value=false)
            -> MulticastSubject HasRefusedLastReward

            SubscribeSubject EntrySite
            -> Take(Count=1) => #10
            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=TaskLogicControl.VirtualSiteGeneration.GapSite.LengthDistribution)
            -> PropertyMapping(Minimum(Selector=Minimum), Maximum(Selector=Maximum), Average(Selector=Mean)) => #13
            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=TaskLogicControl.VirtualSiteGeneration.GapSite.Label)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.ToString()
            -> PropertyMapping(Label(Selector=it)) => #17
            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=TaskLogicControl.VirtualSiteGeneration.GapSite.Brightness)
            -> PropertyMapping(Brightness) => #20
            #10, #13, #17, #20 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai, Minimum=10, Maximum=30, Average=18, Label=InitialGapSite)
            -> BehaviorSubject FirstPatchSite

            SubscribeSubject FirstPatchSite
            -> Take(Count=1)
            -> Condition NotHasRefusedLast
                WorkflowInput Source1 => #0
                SubscribeSubject HasRefusedLastReward => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany ResetHasRefusedLast
                BooleanProperty(Value=true)
                -> MulticastSubject HasRefusedLastReward
                -> Take(Count=1) => #2
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Take(Count=1)
                -> WorkflowOutput
            -> GroupWorkflow AddRewardSite => #27
                WorkflowInput Source1 => #0
                ExternalizedMapping(Minimum, Maximum, Average, Brightness, Label) => #1
                #0, #1 -> SelectMany AddRewardSite
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject PreviousSite

                    SubscribeSubject PreviousSite
                    -> MemberSelector(Selector="Length,StartPosition")
                    -> Add => #5
                    SubscribeSubject SigmaZ
                    -> PropertyMapping(Value) => #7
                    #5, #7 -> Add(Operand=FloatProperty(Value=0)) => #8
                    ExternalizedMapping(Minimum, Maximum, Average) => #9
                    #8, #9 -> IncludeWorkflow(Path=Extensions\DrawFromExponential.bonsai, Minimum=15, Maximum=15, Average=15, Count=1) => #10
                    #8 -> InputMapping(TypeMapping=TypeMapping<System.Double>)
                    -> Bonsai.Numerics.Floor => #12
                    #8, #10, #12 -> Zip
                    -> Take(Count=1)
                    -> InputMapping(StartPosition(Selector=Item1), Length(Selector=Item2), Id(Selector=Item3)) => #15
                    SubscribeSubject ActivePatch
                    -> MemberSelector(Selector=OdorSpecifications)
                    -> PropertyMapping(Odor) => #18
                    ExternalizedMapping(Brightness)
                    -> AindVrForagingDataSchema.Render
                    -> PropertyMapping(Render) => #21
                    SubscribeSubject ActivePatch
                    -> MemberSelector(Selector=RewardSpecifications)
                    -> PropertyMapping(Reward) => #24
                    ExternalizedMapping(Label) => #25
                    #15, #18, #21, #24, #25 -> IncludeWorkflow(Path=Extensions\CreateSite.bonsai, Id=353, Label=RewardSite, Length=35.1602135, StartPosition=0)
                    -> MulticastSubject SiteSpecs => #27
                    Source2=#27 -> WorkflowOutput
                -> WorkflowOutput
            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=TaskLogicControl.VirtualSiteGeneration.RewardSite.LengthDistribution)
            -> PropertyMapping(Minimum(Selector=Minimum), Maximum(Selector=Maximum), Average(Selector=Mean)) => #30
            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=TaskLogicControl.VirtualSiteGeneration.RewardSite.Label)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.ToString()
            -> PropertyMapping(Label(Selector=it)) => #34
            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=TaskLogicControl.VirtualSiteGeneration.RewardSite.Brightness)
            -> PropertyMapping(Brightness) => #37
            #27, #30, #34, #37 -> IncludeWorkflow(Path=Extensions\AddRewardSite.bonsai, Minimum=15, Maximum=15, Average=15, Label=RewardSite) => #38
            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=TaskLogicControl.VirtualSiteGeneration.GapSite.LengthDistribution)
            -> PropertyMapping(Minimum(Selector=Minimum), Maximum(Selector=Maximum), Average(Selector=Mean)) => #41
            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=TaskLogicControl.VirtualSiteGeneration.GapSite.Label)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.ToString()
            -> PropertyMapping(Label(Selector=it)) => #45
            SubscribeSubject SessionSchema
            -> MemberSelector(Selector=TaskLogicControl.VirtualSiteGeneration.GapSite.Brightness)
            -> PropertyMapping(Brightness) => #48
            #38, #41, #45, #48 -> IncludeWorkflow(Path=Extensions\AddGapSite.bonsai, Minimum=10, Maximum=30, Average=18, Label=GapSite)
            -> SelectMany WaitForSiteOutcome
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject PreviousSite

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Z) => #5
                SubscribeSubject PreviousSite
                -> MemberSelector(Selector="Length,StartPosition")
                -> Add => #8
                #5, #8 -> CombineLatest
                -> GreaterThan
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #12
                SubscribeSubject PreviousSite => #13
                #12, #13 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> MulticastSubject FirstPatchSite
            -> Take(Count=1)
            -> Repeat
            -> Condition HasExited
                SubscribeSubject HasRefusedLastReward
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\UpdateState.bonsai)
        -> Repeat
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=TaskLogicControl.TaskStage)
    -> Condition IsForaging => #6
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskStage>(Value=Foraging))
        -> WorkflowOutput
    #3, #6 -> SubscribeWhen

    Defer Habituation => #8
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=TaskLogicControl.HabituationSettings)
        -> Take(Count=1)
        -> AsyncSubject HabituationSettings

        SubscribeSubject HabituationSettings
        -> MemberSelector(Selector=DistanceToReward)
        -> MulticastSubject DistanceToRewardAvailable

        SubscribeSubject HabituationSettings
        -> MemberSelector(Selector=Reward.OperantLogic)
        -> IncludeWorkflow(Path=Extensions\IsNotNull.bonsai)
        -> MemberSelector(Selector=IsOperant)
        -> MulticastSubject IsOperantMode

        SubscribeSubject HabituationSettings
        -> MemberSelector(Selector=Brightness)
        -> Condition HasValue?
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MulticastSubject ScreenBrightness

        SubscribeSubject HabituationSettings
        -> MemberSelector(Selector=Reward.Amount)
        -> BehaviorSubject RewardAmount

        GroupWorkflow SoftwareEventLogging
            SubscribeSubject DistanceToRewardAvailable
            -> CreateSoftwareEvent(EventName=DistanceToRewardAvailable)
            -> MulticastSubject SoftwaveEvents

            SubscribeSubject IsOperantMode
            -> CreateSoftwareEvent(EventName=IsOperantMode)
            -> MulticastSubject SoftwaveEvents

            SubscribeSubject ScreenBrightness
            -> CreateSoftwareEvent(EventName=ScreenBrightness)
            -> MulticastSubject SoftwaveEvents

            SubscribeSubject RewardAmount
            -> CreateSoftwareEvent(EventName=RewardAmount)
            -> MulticastSubject SoftwaveEvents

        Bonsai.Shaders.Timer(DueTime=PT0S) => #20
        SubscribeSubject DistanceToRewardAvailable
        -> Take(Count=1)
        -> InputMapping(Selector=it, Minimum(Selector=Minimum), Maximum(Selector=Maximum), Average(Selector=Mean))
        -> IncludeWorkflow(Path=Extensions\DrawFromExponential.bonsai, Minimum=0, Maximum=0, Average=0, Count=1)
        -> PropertyMapping(DistanceToRewardAvailable) => #25
        #20, #25 -> SelectMany RunToReward => #26
            SubscribeSubject CurrentPosition
            -> MemberSelector(Selector=Value.Z)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Accumulate => #3
            ExternalizedMapping(Value(DisplayName=DistanceToRewardAvailable)) => #4
            #3, #4 -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> CreateSoftwareEvent(EventName=RewardAvailable)
            -> MulticastSubject SoftwaveEvents
            -> WorkflowOutput

            SubscribeSubject CurrentPosition
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Z)
            -> PropertyMapping(StartPosition)
            -> AindVrForagingDataSchema.VirtualSite(Id=0, Label=RunToReward, Length=0, StartPosition=0)
            -> MulticastSubject ActiveSiteLabel
        SubscribeSubject HabituationRewardAmount
        -> Take(Count=1)
        -> PropertyMapping(RewardAmount) => #29
        SubscribeSubject HabituationSettings
        -> MemberSelector(Selector=Reward.Probability)
        -> PropertyMapping(RewardProbability) => #32
        #26, #29, #32 -> SelectMany Reward
            SubscribeSubject IsOperantMode
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> SelectMany WaitForLick
                SubscribeSubject LickEvent
                -> Take(Count=1)
                -> WorkflowOutput
            -> Unit => #4
            SubscribeSubject IsOperantMode
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Unit => #8
            #4, #8 -> Merge => #9
            ExternalizedMapping(Value(DisplayName=RewardAmount)) => #10
            #9, #10 -> DoubleProperty(Value=0) => #11
            ExternalizedMapping(Value(DisplayName=RewardProbability)) => #12
            #11, #12 -> SelectMany DetermineReward
                SubscribeSubject RngSeed
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #2
                ExternalizedMapping(Value) => #3
                #2, #3 -> GreaterThan(Operand=DoubleProperty(Value=0)) => #4
                WorkflowInput Source1 => #5
                #4, #5 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 ? Item2 : 0
                -> Take(Count=1)
                -> WorkflowOutput
            -> MulticastSubject GiveReward
            -> CreateSoftwareEvent(EventName=RewardDelivery)
            -> MulticastSubject SoftwaveEvents
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject CurrentPosition
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Z)
            -> PropertyMapping(StartPosition)
            -> AindVrForagingDataSchema.VirtualSite(Id=0, Label=RewardAvailable, Length=0, StartPosition=0)
            -> MulticastSubject ActiveSiteLabel
        -> Repeat
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=TaskLogicControl.TaskStage)
    -> Condition IsHabituation => #11
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=WorkflowProperty<AindVrForagingDataSchema.TaskStage>(Value=Habituation))
        -> WorkflowOutput
    #8, #11 -> SubscribeWhen
SubscribeSubject StartExperiment => #20
#19, #20 -> SubscribeWhen

Disable GroupWorkflow DebugTools
    GroupWorkflow RenderStateQuad
        SubscribeSubject PostDrawing
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #2
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label)
        -> Equal(Operand=StringProperty(Value=InterPatchSite))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label) => #8
        -> Equal(Operand=StringProperty(Value=GapSite)) => #9
        #8 -> Equal(Operand=StringProperty(Value=InitialGapSite)) => #10
        #9, #10 -> Zip
        -> BitwiseOr
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label)
        -> Equal(Operand=StringProperty(Value=RewardSite))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
          Expression: it ? 255 : 0
        #6, #13, #17 -> Zip
        -> PropertyMapping(ColorR(Selector=Item1), ColorG(Selector=Item2), ColorB(Selector=Item3)) => #19
        #2, #19 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.2
          ExtentY=0.2
          LocationX=0.9
          LocationY=0.9
          Layer=100
          Angle=0
          ColorR=0
          ColorG=255
          ColorB=0
          ColorA=1
        -> WorkflowOutput

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TextureBank => #1
    #0, #1 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #5
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #6
    #5, #6 -> Bonsai.Shaders.Delay(DueTime=PT2S)
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

GroupWorkflow UserInterface
    GroupWorkflow Shortcuts
        Bonsai.Shaders.Input.KeyDown(Key=Keypad4, Modifiers=Control)
        -> Unit
        -> MulticastSubject TriggerValve

        GroupWorkflow PreSessionShortcuts => #3
            Bonsai.Shaders.Input.KeyDown(Key=Keypad1, Modifiers=Control)
            -> BooleanProperty(Value=true)
            -> MulticastSubject OdorValve1
            -> Bonsai.Shaders.Delay(DueTime=PT5S)
            -> BitwiseNot
            -> MulticastSubject OdorValve1

            Bonsai.Shaders.Input.KeyDown(Key=Keypad2, Modifiers=Control)
            -> BooleanProperty(Value=true)
            -> MulticastSubject OdorValve2
            -> Bonsai.Shaders.Delay(DueTime=PT5S)
            -> BitwiseNot
            -> MulticastSubject OdorValve2

            Bonsai.Shaders.Input.KeyDown(Key=Keypad5, Modifiers=Control)
            -> Unit
            -> MulticastSubject AudioTrigger

            Bonsai.Shaders.Input.KeyDown(Key=Keypad0, Modifiers=Control)
            -> Unit
            -> MulticastSubject StartExperimentShortcut

            Bonsai.Shaders.Input.KeyDown(Key=Keypad6, Modifiers=Control)
            -> Take(Count=1)
            -> SelectMany Flush
                WorkflowInput Source1
                -> IntProperty(Value=200)
                -> MulticastSubject ValveOpenTimeMs
                -> Unit
                -> MulticastSubject TriggerValve
                -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
                -> RepeatCount(Count=20) => #6
                ExternalizedMapping(Key, Modifiers)
                -> Bonsai.Shaders.Input.KeyUp(Key=Keypad6, Modifiers=Control) => #8
                #6, #8 -> TakeUntil
                -> LastOrDefault
                -> WorkflowOutput
            -> Repeat

            Annotation "Control+1 // Shift+1"(Text="") => #22
            ExternalizedMapping(Interval(Category=ValveCalibration), OpeningTimeMs(Category=ValveCalibration), Repeats(Category=ValveCalibration)) => #23
            #22, #23 -> GroupWorkflow ValveCalibration
                Bonsai.Shaders.Input.KeyDown(Key=Q, Modifiers=Control)
                -> Take(Count=1) => #1
                ExternalizedMapping(Interval(Category=ValveCalibration), OpeningTimeMs(Category=ValveCalibration), Repeats(Category=ValveCalibration)) => #2
                #1, #2 -> SelectMany LoopValve
                    ExternalizedMapping(DueTime(DisplayName=Interval))
                    -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #1
                    ExternalizedMapping(Value(DisplayName=OpeningTimeMs)) => #2
                    #1, #2 -> IntProperty(Value=100)
                    -> MulticastSubject ValveOpenTimeMs
                    -> Unit
                    -> MulticastSubject TriggerValve => #6
                    ExternalizedMapping(Count(DisplayName=Repeats)) => #7
                    #6, #7 -> RepeatCount(Count=200) => #8
                    Bonsai.Shaders.Input.KeyDown(Key=Q, Modifiers=Shift) => #9
                    #8, #9 -> TakeUntil
                    -> ElementIndex
                    -> MemberSelector(Selector=Index)
                    -> WorkflowOutput
                -> Repeat
        SubscribeSubject StartExperiment => #4
        #3, #4 -> TakeUntil

    GroupWorkflow QC
        SubscribeSubject HarpBehaviorHeartBeat => #0
        SubscribeSubject ExperimentStatus => #1
        SubscribeSubject AverageScreenFps => #2
        SubscribeSubject MainCameraDroppedFrames => #3
        SubscribeSubject SessionAccumulatedReward => #4
        #1, #2, #3, #4 -> CombineLatest => #5
        #0, #5 -> WithLatestFrom
        -> MemberSelector(Selector="Item1.Seconds,Item2.Item1,Item2.Item2,Item2.Item3,Item2.Item4")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as Heartbeat,
            Item2 as ExperimentStatus,
            Item3 as AverageScreenFps,
            Item4 as DroppedFrames,
            Item5 as TotalReward)
        -> WorkflowOutput

        SubscribeSubject MainCameraFrameEvent
        -> MemberSelector(Selector=Value.ChunkData.FrameID)
        -> Bonsai.Dsp.Difference(Order=1)
        -> Subtract(Operand=DoubleProperty(Value=1))
        -> Accumulate
        -> Add(Operand=DoubleProperty(Value=1))
        -> BehaviorSubject MainCameraDroppedFrames

        StringProperty(Value=PreExperiment)
        -> Take(Count=1) => #18
        SubscribeSubject StartExperiment
        -> StringProperty(Value=Running) => #20
        SubscribeSubject EndExperiment
        -> StringProperty(Value=Closed) => #22
        #18, #20, #22 -> Merge
        -> BehaviorSubject ExperimentStatus

        Bonsai.Shaders.RenderFrame
        -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
        -> Bonsai.Dsp.Buffer(Count=60, Skip=30)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: 1.0 / it
        -> BehaviorSubject AverageScreenFps
    -> BehaviorSubject QCDiagnosis

    ExternalizedMapping
      HabituationRewardAmount(Category=HabituationSettings)
      IsOperantMode(Category=HabituationSettings)
      MinDistanceToRwd(Category=HabituationSettings)
      MaxDistanceToRwd(Category=HabituationSettings)
      MeanDistanceToRwd(Category=HabituationSettings)
    -> GroupWorkflow OnlineVariableSetting
        ExternalizedMapping(Value(DisplayName=MinDistanceToRwd, Category=HabituationSettings))
        -> DoubleProperty(Value=10)
        -> Skip(Count=1) => #2
        ExternalizedMapping(Value(DisplayName=MaxDistanceToRwd, Category=HabituationSettings))
        -> DoubleProperty(Value=10)
        -> Skip(Count=1) => #5
        ExternalizedMapping(Value(DisplayName=MeanDistanceToRwd, Category=HabituationSettings))
        -> DoubleProperty(Value=10)
        -> Skip(Count=1) => #8
        #2, #5, #8 -> CombineLatest
        -> InputMapping(Minimum(Selector=Item1), Maximum(Selector=Item2), Mean(Selector=Item3))
        -> SelectMany CreateTruncatedExp
            ExternalizedMapping(Minimum, Maximum, Mean)
            -> AindVrForagingDataSchema.TruncatedExponential(Maximum=1, Mean=0.5, Minimum=0)
            -> WorkflowOutput
        -> BehaviorSubject DistanceToRewardAvailable

        ExternalizedMapping(Value(DisplayName=HabituationRewardAmount, Category=HabituationSettings))
        -> DoubleProperty(Value=0)
        -> Skip(Count=1)
        -> BehaviorSubject HabituationRewardAmount

        ExternalizedMapping(Value(DisplayName=IsOperantMode, Category=HabituationSettings))
        -> BooleanProperty(Value=false)
        -> Skip(Count=1)
        -> BehaviorSubject IsOperantMode

GroupWorkflow Visualizer
    SubscribeSubject MainCameraFrameEvent
    -> MemberSelector(Selector=Value.Image)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #2
    SubscribeSubject AuxiliaryCamera0
    -> MemberSelector(Selector=Value)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #5
    SubscribeSubject AuxiliaryCamera1
    -> MemberSelector(Selector=Value)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #8
    #2, #5, #8 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #10
    SubscribeSubject QCDiagnosis
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #12
    SubscribeSubject CurrentPosition
    -> MemberSelector(Selector=Value.Z)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #15
    SubscribeSubject LickEvent => #16
    -> IntProperty(Value=1) => #17
    #17, #16 -> Zip
    -> Bonsai.Design.Visualizers.LineGraphBuilder(ValueSelector="Item2,Item1", SymbolType=Diamond, LineWidth=0, Capacity=20, XMin=nil, XMax=nil, YMin=0, YMax=2)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.LineGraphVisualizer>) => #20
    SubscribeSubject PressureSensorData
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Seconds, ValueSelector=Value, SymbolType=None, LineWidth=2, Capacity=2000, Min=nil, Max=nil)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.RollingGraphVisualizer>) => #23
    GroupWorkflow ForagingStage => #24
        IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Value=1) => #0
        IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Value=2) => #1
        IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Value=0) => #2
        IncludeWorkflow(Path=Extensions\CheckActiveSiteLabel.bonsai, Value=-1) => #3
        #0, #1, #2, #3 -> Merge
        -> WorkflowOutput
    GroupWorkflow HabituationStage => #25
        IncludeWorkflow(Path=Extensions\CheckHabituationStageLabel.bonsai, Label=RunToReward, Value=1) => #0
        IncludeWorkflow(Path=Extensions\CheckHabituationStageLabel.bonsai, Label=RewardAvailable, Value=2) => #1
        #0, #1 -> Merge
        -> WorkflowOutput
    #24, #25 -> Merge
    -> Bonsai.Design.Visualizers.LineGraphBuilder(ValueSelector="Item2.StartPosition,Item1", SymbolType=Diamond, LineWidth=3, Capacity=10, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.LineGraphVisualizer>) => #28
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #32
      Expression: TimeSpan.FromSeconds(it)
    SubscribeSubject StartExperiment => #33
    #32, #33 -> SubscribeWhen
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #35
    #12, #15, #20, #23, #28, #35 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder
      ColumnCount=4
      RowCount=3
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TableLayoutPanelVisualizer>) => #37
    #10, #37 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
